CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\\\\(fld (?P<Field>[0-9]*) wv (?P<Channel>.*)- time (?P<Time>[0-9]*) - (?P<milSec>[0-9].*)\\\\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:OrigRelA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Green - dsRed")
    Name to assign these images:OrigBug
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Red - Cy5")
    Name to assign these images:OrigNuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:Row
    Metadata category:Column
    Metadata category:Field

Smooth:[module_num:5|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
    Select the input image:OrigNuc
    Name the output image:SmoothNuc
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:SmoothNuc
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:17
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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
    Name the output objects:FilteredNuc
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:40
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:FilteredNuc
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:OrigRelA
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    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuc
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:No

ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:FilteredNuc
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:Yes
    Name the outline image:ShrunkenNucleiOutlines

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:OrigRelA
    Select objects to measure:ShrunkenNuclei
    Select objects to measure:Cytoplasm

TrackObjects:[module_num:13|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
    Choose a tracking method:LAP
    Select the objects to track:FilteredNuc
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):10,300.0
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:1
    Split alternative cost:40
    Merge alternative cost:40
    Maximum gap displacement, in pixel units:50
    Maximum split score:50
    Maximum merge score:50
    Maximum temporal gap, in frames:5
    Filter objects by lifetime?:No
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    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40

RescaleIntensity:[module_num:14|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
    Select the input image:OrigRelA
    Name the output image:RescaledRelA
    Rescaling method:Divide by the image's maximum
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
RescaleIntensity:[module_num:15|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
    Select the input image:OrigNuc
    Name the output image:RescaledNuc
    Rescaling method:Divide by the image's maximum
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledRelA
    Name the output image:RelCytOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells
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    Select outline color:cyan
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredNuc

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledNuc
    Name the output image:NucOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:cyan
    Load outlines from an image or objects?:Objects
    Select objects to display:ShrunkenNuclei

Tile:[module_num:18|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
    Select an input image:RescaledRelA
    Name the output image:Seg_Track_Image
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:RelCytOverlay
    Select an additional image to tile:NucOverlay
    Select an additional image to tile:TrackedCells

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Seg_Track_Image
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Row>_\\\\g<Column>_\\\\g<Field>_\\\\g<Time>
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:21|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:LI07_test.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:No
    Properties image group count:2
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:1
    Experiment name:LI07_test
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CPA images via URL?:No
    Select the classification type:Object
    Select an image to include:OrigNuc
    Use the image name for the display?:No
    Image name:OrigNuc
    Channel color:gray
    Select an image to include:OrigRelA
    Use the image name for the display?:No
    Image name:OrigRelA
    Channel color:green
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Object
    Enter the object name:Nuclei
    Select the X-axis measurement:AreaShape_Area
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Index
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    Select the Y-axis index:ImageNumber
